CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Upload image files of single channel ERG and Ki67. ']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['Image files with suffix "_Hnf4a" will be identified as Hnf4a and "_Ki67" will be identified as Ki67. You can change this rule based on specific file name of choice. ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_Hnf4a.tif")
    Name to assign these images:Hnf4a
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_Ki67.tif")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['This module identifies Hnf4a+ cells from each uploaded image. The parameters of this module does not change except for the thresholding parameters. Using Test Mode, identify an appropriate threshold to apply for all the images. ']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
    Select the input image:Hnf4a
    Name the primary objects to be identified:Hnf4a_pos
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.435,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:6|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notes:['This module identifies Ki67+ cells from each uploaded image. The parameters of this module does not change except for the threshold parameters. Using Test Mode, identify an appropriate threshold to apply for all the images. ']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
    Select the input image:Ki67
    Name the primary objects to be identified:Ki67_pos_all
    Typical diameter of objects, in pixel units (Min,Max):10,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.35,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:55
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:7|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notes:['This module calculates size/shape features using the initial outlines of Hnf4a and Ki67. No parameters need to be changed.']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
    Select object sets to measure:Hnf4a_pos, Ki67_pos_all
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:8|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notes:['This module filters the initial outline of Hnf4a based on Eccentricity calculated from the previous module. It is used to filter out any background staining or artifacts.']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
    Select the objects to filter:Hnf4a_pos
    Name the output objects:FilteredHep
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.4
    Filter using a maximum measurement value?:Yes
    Maximum value:4
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.9
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
Threshold:[module_num:9|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notes:['This module creates a thresholded image of Hnf4a to be used in the MaskObjects module. Copy over the exact threshold parameters used in the IdentifyPrimaryObjects module for Hnf4a']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
    Select the input image:Hnf4a
    Name the output image:Threshold_H
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.435,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Threshold:[module_num:10|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notes:['This module creates a thresholded image of Ki67 to be used in the MaskObjects module. Copy over the exact threshold parameters used in the IdentifyPrimaryObjects module for Ki67.']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
    Select the input image:Ki67
    Name the output image:Threshold_Ki67
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.35,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:40
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    Thresholding method:Otsu

MaskObjects:[module_num:11|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notes:['This module creates a binary mask of Hnf4a positive cells over the thresholded image of Hnf4a']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
    Select objects to be masked:FilteredHep
    Name the masked objects:MaskedHep
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Threshold_H
    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:12|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notes:['This module creates a binary mask of Ki67 positive cells over the thresholded image of Ki67.']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
    Select objects to be masked:Ki67_pos_all
    Name the masked objects:MaskedKi67
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Threshold_Ki67
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:13|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notes:['This module creates a binary mask of overlapping Hnf4a and Ki67 cells using the two masks created in the previous two modules. ']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
    Select objects to be masked:MaskedKi67
    Name the masked objects:Masked_overlap
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskedHep
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.3
    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:14|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notes:['This module converts the mask of Hnf4a/Ki67 overlap into an image. This image is needed if you want to use our MATLAB pipeline for any relevant analysis.']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
    Select the input objects:Masked_overlap
    Name the output image:Masked_overlap_tiff
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:15|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notes:['This module saves the image of the Hnf4a/Ki67 overlap mask. You can change the output file location to save where you want. ']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
    Select the type of image to save:Image
    Select the image to save:Masked_overlap_tiff
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ki67
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Same folder as image|J:\\Azizoglu Lab\\Lab Members\\Won\\Image Analysis\\Spatial Analysis of EC Proliferation\\Exp 24 (D1)\\Exp 24 ID2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:16|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notes:['This module converts the mask of all Hnf4a nuclei into an image. This image is needed if you want to use our MATLAB pipeline for any relevant analysis.']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
    Select the input objects:FilteredHep
    Name the output image:FilteredHep_tiff
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:17|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notes:['This module saves the image of the Hnf4a nuclei mask. You can change the output file location to save where you want. ']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
    Select the type of image to save:Image
    Select the image to save:FilteredHep_tiff
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hnf4a
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Same folder as image|J:\\Azizoglu Lab\\Lab Members\\Won\\Image Analysis\\Spatial Analysis of EC Proliferation\\Exp 24 (D1)\\Exp 24 ID2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

CalculateMath:[module_num:18|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notes:['This module calculates the the percent of total Hnf4a positive cells that are Hnf4a/Ki67 double positive. The excel output will have this number.']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
    Name the output measurement:PercentPositive
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_Masked_overlap
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_MaskedHep
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:19|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notes:['You can choose the exact excel files to export in this module based on what you need and the directory the files will be exported to. By default, all files are selected.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\Users\\aashita\\Desktop\\test
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Ki67_pos_all|AreaShape_MaxFeretDiameter,Ki67_pos_all|AreaShape_MinFeretDiameter,Ki67_pos_all|AreaShape_Zernike_8_8,Ki67_pos_all|AreaShape_Zernike_8_2,Ki67_pos_all|AreaShape_Zernike_8_6,Ki67_pos_all|AreaShape_Zernike_8_0,Ki67_pos_all|AreaShape_Zernike_8_4,Ki67_pos_all|AreaShape_Zernike_9_5,Ki67_pos_all|AreaShape_Zernike_9_9,Ki67_pos_all|AreaShape_Zernike_9_3,Ki67_pos_all|AreaShape_Zernike_9_7,Ki67_pos_all|AreaShape_Zernike_9_1,Ki67_pos_all|AreaShape_Zernike_2_2,Ki67_pos_all|AreaShape_Zernike_2_0,Ki67_pos_all|AreaShape_Zernike_5_5,Ki67_pos_all|AreaShape_Zernike_5_1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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