CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:ERG_central
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:ERG_central
    Name the primary objects to be identified:ERG_central
    Typical diameter of objects, in pixel units (Min,Max):6,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectNeighbors:[module_num:6|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
    Select objects to measure:ERG_central
    Select neighboring objects to measure:ERG_central
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:ERG_central|Neighbors_FirstClosestDistance_Expanded,ERG_central|Neighbors_NumberOfNeighbors_Expanded,ERG_central|Neighbors_SecondClosestObjectNumber_Expanded,ERG_central|Neighbors_FirstClosestObjectNumber_Expanded,ERG_central|Neighbors_PercentTouching_Expanded,ERG_central|Neighbors_SecondClosestDistance_Expanded
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:ERG_central
    Combine these object measurements with those of the previous object?:No
    File name:NearestNeighborDistance_central.csv
    Use the object name for the file name?:No
